PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1.000,-1.000,-0.498]
  expName = pvt
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Py
      Begin Experiment:
        # Clock to measure the reaction time.
        rt_clock = clock.Clock()
        # rt holds the reaction time in each frame.
        rt = 0
        #s_rt is a string used to display the reaction time, or an error message.
        s_rt = ""
      Begin Routine:
        # Reset the reaction time clock to 0.
        rt_clock.reset()
        # Initialze the reaction time and string
        rt = 0
        s_rt = ""
        # If user pressed the key before we begin, that's a falseStart.
        # Skip this routine.
        if falseStart:
            continueRoutine = False
      Each Frame:
        # trial_code update
        # Get the current time.
        rt = rt_clock.getTime()
        s_rt = "{0:d}".format(int(1000*rt))

        # Did the user type a key?
        if event.getKeys(keyList=['space']):
            # Reaction time < 100 mS is a false start.
            if rt < 0.100:
                falseStart = True
            # Key press -> end routine
            continueRoutine = False
            # Tell system to update the window. Otherwise final rt
            # won't be shown until after a pause.
            win.flip()
    PolygonComponent rt_rect_active
      fillColor = $rt_rect_empty.fillColor
      shape = rectangle
      size = (rt_rect_empty.width, rt_rect_empty.height)
      startVal [time (s)] = 0.0
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    TextComponent rt_text_active
      color = yellow
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $s_rt
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  Routine thanks
    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = All done! Thanks for taking part.
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  Routine instructions
    TextComponent instruct_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        When digits appear in the red box, hit the space bar as quickly as possible.

        Hit the space bar now to start the test.
    KeyboardComponent instruct_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine display_rt
    CodeComponent rt_code_final
      Code Type = Py
      Begin Routine:
        # If there was a false start, then display "FS!"
        if falseStart:
            s_rt = "FS!"
    PolygonComponent rt_rect_final
      fillColor = $rt_rect_empty.fillColor
      shape = rectangle
      size = (rt_rect_empty.width, rt_rect_empty.height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent rt_text_final
      color = $rt_text_active.color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $s_rt
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  Routine check_loop
    CodeComponent check_loop_code
      Code Type = Py
      Begin Experiment:
        # Total loop time in seconds. For final run this should be 180 (3min) or
        # 600 (10 min) depending on whether doing brief or full
        # Psychomotor Vigilance Test.
        loop_time = 30
      Begin Routine:
        if loop_clock.getTime() >= loop_time:
            trials.finished=True
  Routine initialize_loop
    CodeComponent initialize_loop_clock
      Code Type = Py
      Begin Routine:
        # Keep running trials until loop_clock reaches the time set in check_loop.
        loop_clock = clock.Clock()
  Routine wait
    CodeComponent wait_code
      Code Type = Py
      Begin Experiment:
        # Keep track of whether the user presses the key too early.
        falseStart = False
      Begin Routine:
        # Clear any pending keyboard events
        event.clearEvents(eventType='keyboard')
        falseStart = False
      Each Frame:
        # Space key during the wait period is a falseStart.
        if event.getKeys(keyList=['space']):
            falseStart = True
            # Exit early.
            continueRoutine = False
    PolygonComponent rt_rect_empty
      fillColor = $[1.000,-1.000,-1.000]
      shape = regular polygon...
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $1.0+8*random()
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Flow
  Routine instructions
  Routine initialize_loop
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 10000
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    Routine wait
    Routine trial
    Routine display_rt
    Routine check_loop
  LoopTerminator trials
  Routine thanks
